PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'refreshRate': "['60','120']", 'translation': "['ENG','EST']", 'EEG': "['0','1']", 'port address': '0x3FF8', 'testRun': "['0','1']"}
  Full-screen window = True
  Monitor = spotlight
  Screen = 1
  Units = deg
  Use version = 2024.2.1
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Müller_et_al_2003_v2024_2_1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine block_intro
    RoutineSettingsComponent block_intro
      saveStartStop = False
      stopVal [duration (s)] = presentInstructionsFor
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    CodeComponent block_code
      Code Type = Auto->JS
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      Begin Routine:
        if 'training' in condFile:
            bText = task_texts['bText_training'] # 'Following are the training trials \n\n Press "space" to begin...'
            selectRows = list(range(0,1))
        else:
            bText = task_texts['bText_experiment'] # 'Following are the experimental trials \n\n Press "space" to begin...'
            selectRows = ''
    TextComponent block_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bText
      wrapWidth = 30
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    KeyboardComponent block_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine cond_setup
    RoutineSettingsComponent cond_setup
      saveStartStop = False
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    CodeComponent cond_setup_code
      Code Type = Auto->JS
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      Begin Routine:
        if isTraining:
            nTrials = 10 # trials per each row in the condition table
        else:
            nTrials = 40
  Routine iti
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    CodeComponent iti_code
      Code Type = Auto->JS
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      Begin Experiment:
        absNumOfTrials = 0 # Keeps track of the number of trials
      Begin Routine:
        shuffle(randImage)
        rects.opacities = 1 # Set the opacity back up for all the boxes
        absNumOfTrials += 1 # Increase the trial counter by 1
        thisExp.addData('absNumOfTrials', absNumOfTrials) # Send info about trial number to the data file
      Each Frame:
        rects.draw() # Presents place holders (white boxes)
    TextComponent fix_iti
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine trial
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    CodeComponent presentStim
      Code Type = Py
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      Begin Experiment:
        import copy

        # create speaker
        deviceManager.addDevice(
            deviceName='mySound',
            deviceClass='psychopy.hardware.speaker.SpeakerDevice',
            index=8.0
            )

        mySound = sound.Sound('A', stereo=False, hamming=True, secs=0.180, speaker='mySound', name='mySound')
      Begin Routine:
        frameCount = 0
        responseGiven = False
        targetPair = False
        nrOfEntries = 0
        cond = [pos2attLeft-1, pos2attRight-1]
        counter = 0
        opacities = [0,0,0,0]
        switchTime = 0
        t2 = 0

        # List of components
        imList = [image_a, image_b, image_c, image_d]

        trigN = '1'+ trigdic['start'] + trigdic[attendCond] + trigdic[save_hand] + trigdic['notResp']

        # Make all the symbols visible
        for im in imList:
            im.opacity = 1
        keys = kb.getKeys()

        allPresentedSymbols = list()

        if int(expInfo['testRun']):
            RTs = [(i + 1) + random() for i in range(randint(1, 3))]
            nDummyResponses = 0
      Each Frame:
        if not isTraining:
            sendTrigger(t-t2, trigN, expInfo['EEG'], 0.05)

        rects.draw() # Present the boxes

        # List of default opacities, this will be written over for one frame by checkOpaStatus if necessary
        # This is just to keep the duration of "on frame" ~ 1000/60 ms (1000/60.8 in origina)
        if sum(opacities) and frameConst-counter <= 1: # frameConst == 1 on 60 Hz
            opacities = [0,0,0,0]
            counter = 0
        else:
            counter += 1
        # Sync at 533.3(3) ms after the start
        frameNow = startFrame + frameN
        # Change the opacity based cycle duration in frames
        opacities = checkOpaStatus(opacities, flipAfterEvery, frameNow) # fAE == [4, 7, 3, 5] by default
        # Change the opacity of the boxes based on checkOpaStatus()
        if t <= stimDur-waitRespTime:
            rects.opacities = opacities
        else: # If the presentation is over set back to 1
            rects.opacities = 1

        # Change symbol after every 183.3(3) ms
        if frameN % symShowFrames == 0 and not t > stimDur-waitRespTime: # stimDur-(waitRespTime+0.1833) # symShowFrames == 11 frames (on 60 Hz)
            # Take random images from the set
            randomSet = randImage[0:4]
            imCount = 0
            for im in imList:
                im.image = imageArray[randomSet[imCount]] # randImage == [0,1,2,3,4,4,4,4]
                imCount += 1
            # If the target is in both of the target locations then
            if 'target' in imageArray[randImage[cond[0]]] and 'target' in imageArray[randImage[cond[1]]]:
                # If wait time has exceeded
                if frameN-frameCount >= waitNextPairFrames+symShowFrames:
                    # If last set included target pair and no resp was recorded
                    if targetPair and not responseGiven:
                        addData('miss', targetPair, absNumOfTrials, nrOfEntries, 'miss') # Add data
                        nrOfEntries += 1 # Keep track of number of entries in current trial
                    switchTime = t # Start the clock
                    targetPair = True # This will be set False after every response (also in the very beginning)
                    frameCount = frameN # This will be used to check if wait time has exceeded
                    responseGiven = False # To keep track if response was already recorded
                else: # If wait time is not over yet but random sampling gave a another pair of
                    # targets then just change one of them randomly to non-target
                    selectRandLoc = cond[randint(0,1)]
                    replaceRandSymb = randint(0,4)
                    imList[selectRandLoc].image = nonTargetSet[replaceRandSymb] # nonTargetSet == imageArray[0:4]
                    randomSet[selectRandLoc] = replaceRandSymb  # Update randomSet to reflect the change
            if not t > (stimDur - waitRespTime):
                allPresentedSymbols.append(copy.deepcopy(randomSet))
                if int(expInfo['testRun']):
                    if 'target' in imList[cond[0]].image and 'target' in imList[cond[1]].image :
                        mySound = sound.Sound('A', octave=2, hamming=True, secs=0.180,volume=1.0)
                        mySound.play()
            shuffle(randImage) # Shuffle for the next round

        # Check keys
        if int(expInfo['testRun']):
            if len(RTs) > nDummyResponses and t >= RTs[nDummyResponses]:
                simulated_key = keyboard.KeyPress(name='space', code='space', tDown=t)  # Simulate keypress
                keys = [simulated_key]  # Mimic PsychoPy key structure
                nDummyResponses += 1
            else:
                keys = 0
        else:
            keys = kb.getKeys()

        if keys:
            if 'space' in keys[-1].name:
                trigN = trigN[0:-1]+trigdic['resp']
                t2 = t
                if not isTraining:
                    sendTrigger(t-t2, trigN, expInfo['EEG'], 0.05)
                if not targetPair:
                    addData('false alarm', targetPair, absNumOfTrials, nrOfEntries, 'FA')
                elif not responseGiven:
                    addData(t-switchTime, targetPair, absNumOfTrials, nrOfEntries, 1)
                    if isTraining:
                        mySound = sound.Sound('A', octave=4, hamming=True, secs=0.180,volume=0.5)
                        mySound.play()
                nrOfEntries += 1
                responseGiven = True
                targetPair = False
            elif 'escape' in keys[-1].name:
                core.quit()

        # Do not show the symbols if the presentation is over (response will be still recorded)
        if t > stimDur-waitRespTime and imList[0].opacity:
            for im in imList:
                im.opacity = 0
      End Routine:
        thisExp.addData('allStim', [allPresentedSymbols])

        # Final check at end of trial to log missed responses
        if not responseGiven:
            if targetPair:
                addData('miss', targetPair, absNumOfTrials, nrOfEntries, 'miss')  # Missed target
            elif nrOfEntries == 0:
                addData('correct rejection', targetPair, absNumOfTrials, nrOfEntries, 'CR')  # No target, no response
            nrOfEntries += 1
            responseGiven = True  # Mark as handled
    ImageComponent image_a
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[0]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    ImageComponent image_b
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[1]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    ImageComponent image_c
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[2]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    ImageComponent image_d
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[3]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    TextComponent fix_trial
      durationEstim = 4.1
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      text = +
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  Routine outro
    RoutineSettingsComponent outro
      saveStartStop = False
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    TextComponent outro_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $task_texts['bye']
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  Routine cond_intro
    RoutineSettingsComponent cond_intro
      saveStartStop = False
      skipIf = trials.thisN != int(nTrials/2) and trials.thisN != 0
      stopVal [duration (s)] = presentInstructionsFor
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    CodeComponent hands
      Code Type = Auto->JS
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      Begin Routine:
        halfOftrials = int(nTrials/2)

        # Randomize hands before each block
        if not trials.thisN:
            hand_list = [0,1]
            shuffle(hand_list)

        if trials.thisN > halfOftrials-1:
            current_hand = hands_in_translation[hand_list[0]] # for presenting
            save_hand = hands[hand_list[0]] # for saving
        else:
            current_hand = hands_in_translation[hand_list[1]]
            save_hand = hands[hand_list[1]]

        # Define numbers to draw
        numbers = ['1', '2', '3', '4']

        # Create TextStim objects for each number
        text_stims = []
        for num, pos in zip(numbers, xys):
            text_stim = visual.TextStim(
                win=win,
                text=num,
                pos=pos,
                color='black',
                height=1.0  # Adjust as needed
            )
            text_stims.append(text_stim)
      Each Frame:
        rects.draw() # Present the boxes

        # Draw all numbers
        for stim in text_stims:
            stim.draw()
    TextComponent text_block_above
      letterHeight = 2
      pos = (0, 5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['cond_text_attend'] + ' ' + attendCond
      wrapWidth = 30
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    KeyboardComponent key_block_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_block_below
      letterHeight = 2
      pos = (0, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['cond_text_hand'] + ' ' + current_hand
      wrapWidth = 30
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    TextComponent please_fixate
      letterHeight = 0.75
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['gaze']
      wrapWidth = 6
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  Routine setup
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    CodeComponent define_vars
      Code Type = Py
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      Begin Experiment:
        core.rush(True, realtime=True)

        if expInfo['EEG'] == '1':
            print('Set port')
            from psychopy import parallel
            try:
                port_address = int(expInfo['port address'], 0)   # '0' base allows both hex & decimal
                port = parallel.ParallelPort(address=port_address)
                port.setData(0)
                print(f"Parallel port initialized at {hex(port_address)}")
            except ValueError:
                print(f"Invalid port address: {expInfo['port address']}")
            except Exception as e:
                print(f"Error initializing parallel port: {e}")

        trigdic = {
            'start': '1',
            'notStart': '0',
            '1+2': '1100',
            '1+3': '1010',
            '2+4': '0101',
            '3+4': '0011',
            'left': '0',
            'right': '1',
            'notResp': '0',
            'resp': '1'
            }

        trigN = str()

        def sendTrigger(t, trigN, EEG, trigDur):
            if str(EEG) == '1':
                if t < trigDur and t > 0:  # send trigger for 50 ms and do not send the trigger before next flip time
                    port.setData(int(trigN, 2))
                else:
                    port.setData(0)

        instrFile = 'translations/translation_'+ expInfo['translation'].lower()+'.xlsx'

        # Multiplier that scales the presentation times if the refresh rate is not 60
        frameConst = int(expInfo['refreshRate'])/60

        # This is to sync at 533.3(3) ms after the start of the presentation
        startFrame = 390 * frameConst

        # Waiting response after each presentation for that amount of time
        # Meaning that the "blank period" is this + whatever gets defined in iti routine
        waitRespTime = 1

        # NB! Actual stimulus duration is stimDur - waitRespTime
        stimDur = 3.1 + waitRespTime # stimDur = 4.1 # (e.g. 186 + 60 frames with 60 Hz)

        k = 0.8 # Just a scaler for rescaling the sizes
        boxSize = (2.5, 3.2)
        symbolSize = (2.5*k, 3.2*k) # Should scale down compared to boxes (if tranparent)?

        # Distance from centre to the edge of the stimuli in deg
        ecc = [5.25, 10.25] # x (4 or 9) + (width of the stimulus (2.5 deg) / 2)
        # List of box positions
        xys = [(ecc[1]*-1,0), (ecc[0]*-1,0),(ecc[0],0), (ecc[1],0)]

        # Array of place holder boxes to be presented on screen
        rects = visual.ElementArrayStim(
            win, name = 'rects', units='deg',
            fieldPos=(0.0, 0.0), fieldSize=(3, 4), fieldShape='square',
            nElements=4, sizes= boxSize, xys=xys,
            colors=([1.0, 1.0, 1.0]) , colorSpace='rgb', opacities=1, oris=0,
            sfs=0, contrs=[1, 1,1,1], phases=0, elementTex='sqr',
            elementMask=None, texRes=48, interpolate=True,
            autoLog=None, maskParams=None
        )

        # Make a keyboard object
        kb = keyboard.Keyboard()

        # List of images used
        imageArray = [
            'stimuli/rect_ur.png',
            'stimuli/rect_dr.png',
            'stimuli/rect_dl.png',
            'stimuli/rect_ul.png',
            'stimuli/rect_target.png'
        ]

        # 4x as many target stimuli in the set should give
        # (random sampling without replacement) aprox. 70% trials with 1-3 target pairs
        randImage = [0,1,2,3,4,4,4,4] # Each number represents a symbol (4 == target)
        shuffle(randImage) # Shuffle the pool for the first round

        # A set with no targets (to replace targets if minimum interval of 905 ms have not eceeded after presenting the last target pair)
        nonTargetSet = imageArray[0:4]

        # This helps with data entries (see the code component in the trial routine)
        def addData(rt, isPair, trials, nrOfEntries, accuracy):
        #    if nrOfEntries > 0:
        #        thisExp.nextEntry()
            thisExp.nextEntry()
            thisExp.addData('hand', save_hand)
            thisExp.addData('RT', rt)
            thisExp.addData('targetPair', isPair)
            thisExp.addData('absNumOfTrials', trials)
            thisExp.addData('accuracy', accuracy)

        # Frame flipping schedule
        flipAfterOriginal = [4, 7, 3, 5] # Flip after that many frames (on 60 hz monitor)
        flipAfterEvery = [element * frameConst for element in flipAfterOriginal] # Multiply with the scaler

        # Chec if opacity of the box needs to be turned up (see the code component in the trial routine)
        def checkOpaStatus(opas, flipAfterEvery, frameNow):
            for opai in range(0, len(opas)):
                if frameNow % flipAfterEvery[opai] == 0:
                    opas[opai] = 1
            return opas

        # Change the symbol in that many frames
        symShowFrames = 11*frameConst
        waitNextPairFrames = 54*frameConst # waitNextPairFrames = 54*frameConst # (aprox 900 ms, 905 in original)

        # Load the table using PsychoPy's built-in function
        task_data = data.importConditions(instrFile)
        #print(task_data)
        # Initialize the dictionary
        task_texts = {}

        # Populate the dictionary from the loaded table
        for row in task_data:
            key = row['key'].strip()
            message = row['translated_message'].strip()
            task_texts[key] = message

        # For specific use (e.g., hands in translation)
        hands = ['left', 'right']
        hands_in_translation = [task_texts['left_translation'], task_texts['right_translation']]

        # Example: Counting keys starting with 'general_intro'
        partial_key = 'general_intro'
        # Initialize count
        count = 0

        # Iterate through the keys and count matches
        for key in task_texts.keys():
            if key.startswith(partial_key):
                count += 1

        if int(expInfo['testRun']):
            presentInstructionsFor = 0.5
        else:
            presentInstructionsFor = 1e6  # Effectively "infinite"
    TextComponent intro_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $translated_message
      wrapWidth = 30
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    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator intro loopType="TrialHandler"
    Selected rows = $range(0,count)
    conditionsFile = $instrFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine setup
  LoopTerminator intro
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condFile': 'training.xlsx'},
      {'condFile': 'experiment.xlsx'}]
    Routine block_intro
    LoopInitiator conditions loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = random
      nReps = 1
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      Routine cond_setup
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = nTrials
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        Routine cond_intro
        Routine iti
        Routine trial
      LoopTerminator trials
    LoopTerminator conditions
  LoopTerminator blocks
  Routine outro
