PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = semicolon
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'refreshRate': "['60','120', '180', '240']", 'translation': "['ENG','EST']", 'EEG': "['0','1']", 'port address': '0x3FF8', 'testRun': "['0','1']", 'volume': '0.75', 'eyeTracker': '[0,1]', 'eogCalib': '[0,1]', 'maxLum': '0.5', 'trainingSession': '[0,1]'}
  Full-screen window = True
  Monitor = spotlight
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1079]
  color = $[-1,-1,-1]
  expName = Müller_et_al_2003_v2026.1.1
  eyetracker = eyetracker.hw.mouse.EyeTracker
  keyboardBackend = ioHub
  mgBlink = ['MIDDLE_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
  rush = True
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Routines
  Routine block_intro
    RoutineSettingsComponent block_intro
      saveStartStop = False
      stopVal [duration (s)] = presentInstructionsFor
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    CodeComponent block_code
      Code Type = Auto->JS
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      Begin Experiment:
        repeatCondN = 1
      Begin Routine:
        if blocks.thisN > 0:
            isTraining = 0
        else:
            isTraining = 1

        if not isTraining or trainingSession:
            repeatCondN = 3
        else:
            repeatCondN = 1

        if isTraining:
            if (eyeTrackerOn and eog_calib) or (not eyeTrackerOn and not eog_calib) or (eyeTrackerOn and not eog_calib):
                bText = ''
                continueRoutine = False
            else:
                bText = task_texts['bText_training'] # 'Following are the training trials \n\n Press "space" to begin...'
        else:
            bText = task_texts['bText_experiment'] # 'Following are the experimental trials \n\n Press "space" to begin...'
    TextComponent block_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bText
      wrapWidth = 30
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    KeyboardComponent block_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine cond_setup
    RoutineSettingsComponent cond_setup
      saveStartStop = False
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    CodeComponent cond_setup_code
      Code Type = Py
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      Begin Experiment:
        eog_calib = expInfo['eogCalib']

        def make_positions(layout):
            if layout == "x":
                return [(float(x), 0.0) for x in x_points]
            elif layout == "grid":
                xs = np.linspace(-x_max, x_max, nx)
                ys = np.linspace(-y_max, y_max, ny)
                pos = [(float(x), float(y)) for y in ys[::-1] for x in xs]
                return pos
            else:
                raise ValueError("Unknown layout: " + str(layout))
      Begin Routine:
        if isTraining and not trainingSession:
            nTrials = 10 # trials per each row in the condition table
        else:
            nTrials = 40

        if eog_calib and conditions.thisN % 4 == 0:
            trigger_start = None
            # Choose calibration layout
            calib_layout = "x"     # "x" (horizontal only) or "grid" (2D)

            x_points = [-ecc[1], -ecc[0], -1, 0, 1, ecc[0], ecc[1]]   # or build from ecc + extras

            # If you ever need a 2D grid later
            nx, ny = 5, 5
            x_max, y_max = max(x_points), max(x_points)   # deg (set once)

            calibration_positions = make_positions(calib_layout)
            # Extract and sort x coordinates
            x_positions = sorted(x for x, y in calibration_positions)
            x_to_axis_index = {x: i for i, x in enumerate(x_positions)}

            shuffle(calibration_positions)
            # ensure center first (optional)
            calibration_positions = [p for p in calibration_positions if p != (0.0, 0.0)]
            calibration_positions.insert(0, (0.0, 0.0))

            # timing/state as before...
            fixation_hold_time = 0.5
            sample_time_default = 1.5
            sample_time_first = 2.0

            current_calib_index = 0
            phase = "hold"
            phase_start = 0.0
            calibration_done = False

            calib_dot.opacity = 1.0
            calib_dot.pos = calibration_positions[current_calib_index]
            current_x = calibration_positions[current_calib_index][0]
            trigN = '1'+ str(isTraining) + trigdic['calib'] + trigdic[str(x_to_axis_index[current_x])]

            eyeTrackerTriggerSent = 0
        else:
            continueRoutine = False
      Each Frame:
        #current_point = x_points.index(calibration_positions[current_calib_index][0])
        if t > 4:
            # --- Key handling ---
            keys = kb.getKeys()
            if 'space' in keys and eog_calib:
                # restart calibration
                current_calib_index = 0
                phase = "hold"
                phase_start = t
                calibration_done = False

                calib_dot.opacity = 1.0
                calib_dot.pos = calibration_positions[current_calib_index]
            # --- Calibration logic ---
            if eog_calib and not calibration_done:
                current_x = calibration_positions[current_calib_index][0]
                current_point = x_points.index(current_x)

                # durations
                sample_duration = sample_time_first if current_calib_index == 0 else sample_time_default

                # always keep dot at the current target
                calib_dot.pos = calibration_positions[current_calib_index]

                elapsed = t - phase_start

                if phase == "hold":
                    # steady dot
                    calib_dot.lineWidth = 2.0

                    if elapsed >= fixation_hold_time:
                        phase = "sample"
                        phase_start = t
                        trigger_start = None

                elif phase == "sample":
                    # pulse lineWidth a bit for visibility (purely cosmetic)
                    # smooth 0..1 progress through the sample window:
                    p = min(1.0, elapsed / sample_duration)
                    calib_dot.lineWidth = 5.0 + 5.0 * np.sin(2*np.pi * p -np.pi/4)

                    if trigger_start == None:
                        trigger_start = t

                    trigN = '1'+ str(isTraining) + trigdic['calib'] + trigdic[str(x_to_axis_index[current_x])]
                    sendTrigger(t-trigger_start, trigN, expInfo['EEG'], 0.05)
                    if expInfo['eyeTracker'] == '1' and not eyeTrackerTriggerSent:
                        ioServer.sendMessageEvent(text = 'trial_start', category = 'calibration_'+str(x_to_axis_index[current_x]))
                        eyeTrackerTriggerSent = 1
                    if elapsed >= sample_duration:
                        # advance to next point
                        current_calib_index += 1
                        phase = "hold"
                        phase_start = t
                        trigger_start = None
                        eyeTrackerTriggerSent = 0

                        if current_calib_index >= len(calibration_positions):
                            calibration_done = True
                            calib_dot.opacity = 0.0  # hide dot when done
                            continueRoutine = False

                calib_dot.draw()
    PolygonComponent calib_dot
      fillColor = red
      lineColor = blue
      lineWidth = 2
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent calib_text_on_screen
      letterHeight = 1
      pos = (0, 2.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $task_texts['calib_text']
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  Routine iti
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    CodeComponent iti_code
      Code Type = Auto->JS
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      Begin Experiment:
        absNumOfTrials = 0 # Keeps track of the number of trials
      Begin Routine:
        shuffle(randImage)
        rects.opacities = 1 # Set the opacity back up for all the boxes
        absNumOfTrials += 1 # Increase the trial counter by 1
        thisExp.addData('absNumOfTrials', absNumOfTrials) # Send info about trial number to the data file

        if fb_pairs_msg:
            if fb_pairs_msg == pair_snd_translation[0]:
                fb_pairs_save = 'on'
                thisExp.addData('sndPairs', fb_pairs_save)
            else:
                fb_pairs_save = 'off'
                thisExp.addData('sndPairs', fb_pairs_save)
            if fb_sound_msg == feedback_snd_translation[0]:
                sndFeedback_save = 'on'
                thisExp.addData('sndFeedback', sndFeedback_save)
            else:
                sndFeedback_save = 'off'
                thisExp.addData('sndFeedback', sndFeedback_save)
        else:
            fb_pairs_save = 'off'
            sndFeedback_save = 'off'
            thisExp.addData('sndPairs', fb_pairs_save)
            thisExp.addData('sndFeedback', sndFeedback_save)
      Each Frame:
        rects.draw()

        # if you see a plip in the brightness during the iti
        # use this instead
        #if frameN > 0:
        #    rects.draw() # Presents place holders (white boxes)
    TextComponent fix_iti
      color [set every repeat] = $[mLum, mLum, mLum]
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine trial
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    CodeComponent presentStim
      Code Type = Py
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      Begin Experiment:
        import copy

        # initialize 'Speaker'
        deviceManager.addDevice(
            deviceName='Speaker',
            index=6.0,
            name='Speakers (Realtek(R) Audio)', # Speakers (Realtek(R) Audio)  Headphones (Realtek(R) Audio)
            deviceClass='psychopy.hardware.speaker.SpeakerDevice',
            resample=True,
            latencyClass=1,
        )


        mySound = sound.Sound('A', stereo=True, hamming=True, secs=0.100, speaker='Speaker', name='mySound')

        if expInfo['eyeTracker'] == '1':
            trainingList = ['experiment','training']
      Begin Routine:
        #rects.colors=([1.0, 1.0, 1.0])

        frameCount = 0
        responseGiven = False
        targetPair = False
        nrOfEntries = 0
        cond = [pos2attLeft-1, pos2attRight-1]
        counter = 0
        opacities = [0,0,0,0]
        switchTime = 0
        t2 = 0

        # Response window in seconds
        MIN_RT = 0.250
        MAX_RT = 1.000
        INTERMEDIATE_IDX = 3  # 4th position

        eventType = None         # 'hit', 'fa', or None
        eventOnset = None
        eventResponded = False

        eventOnset = None
        eventResponded = False

        # ADDED: store recent lure onsets
        lureOnsets = []

        # List of components
        imList = [image_a, image_b, image_c, image_d]

        #trigN = '1'+ trigdic['start'] + trigdic[attendCond] + trigdic[save_hand] + trigdic['notResp']
        trigN = '1'+ str(isTraining) + trigdic['start'] + trigdic[attendCond]

        # Make all the symbols visible
        for im in imList:
            im.opacity = 1
        keys = kb.getKeys()

        allPresentedSymbols = list()

        if int(expInfo['testRun']):
            RTs = [(i + 1) + random() for i in range(randint(1, 3))]
            nDummyResponses = 0

        if expInfo['eyeTracker'] == '1':
            eyeTrackerTriggerSent = 0
      Each Frame:
        sendTrigger(t-t2, trigN, expInfo['EEG'], 0.05)

        if expInfo['eyeTracker'] == '1' and not eyeTrackerTriggerSent:
            ioServer.sendMessageEvent(text = 'trial_start', category = str(isTraining)+'_'+attendCond)
            eyeTrackerTriggerSent = 1

        rects.draw()  # Present the boxes

        # List of default opacities, this will be written over for one frame by checkOpaStatus if necessary
        # This is just to keep the duration of "on frame" ~ 1000/60 ms (1000/60.8 in original)
        if sum(opacities) and frameConst-counter <= 1:  # frameConst == 1 on 60 Hz
            opacities = [0, 0, 0, 0]
            counter = 0
        else:
            counter += 1

        # Sync at 533.3(3) ms after the start
        frameNow = startFrame + frameN

        # Change the opacity based cycle duration in frames
        opacities = checkOpaStatus(opacities, flipAfterEvery, frameNow)  # fAE == [4, 7, 3, 5] by default

        # Change the opacity of the boxes based on checkOpaStatus()
        if t <= stimDur - waitRespTime:
            rects.opacities = opacities
        else:  # If the presentation is over set back to 1
            rects.opacities = 1
        #    rects.colors=([0.5, 0.5, 0.5])

        # -----------------------------
        # Change symbol after every 183.3(3) ms
        # -----------------------------
        if frameN % symShowFrames == 0 and not t > stimDur - waitRespTime:

            # Take random images from the set
            randomSet = randImage[0:4]
            imCount = 0
            for im in imList:
                im.image = imageArray[randomSet[imCount]]
                imCount += 1

            # Compute current on-screen state
            is_target = [('target' in im.image) for im in imList]
            att0, att1 = cond[0], cond[1]
            hit_now = is_target[att0] and is_target[att1]

            # -----------------------------
            # Target-pair logic
            # -----------------------------
            if hit_now:
                if frameN - frameCount >= waitNextPairFrames + symShowFrames:
                    targetPair = True
                    # Start a new valid target-pair epoch
                    eventOnset = t
                    eventResponded = False
                    frameCount = frameN

                    # Target epoch takes priority over previous lure epochs
                    lureOnsets = []

                else:
                    # Break too-early repeated target pair
                    selectRandLoc = cond[randint(0, 1)]
                    replaceRandSymb = randint(0, 4)
                    imList[selectRandLoc].image = nonTargetSet[replaceRandSymb]
                    randomSet[selectRandLoc] = replaceRandSymb

                    # IMPORTANT: recompute after replacement
                    is_target = [('target' in im.image) for im in imList]
                    hit_now = is_target[att0] and is_target[att1]

            # -----------------------------
            # Lure-event logic for FA windows
            # Must be OUTSIDE the hit_now branch
            # -----------------------------
            single_attended = (is_target[att0] ^ is_target[att1])
            intermediate_target = is_target[INTERMEDIATE_IDX]

            if attendCond in ('1+2', '3+4'):
                lure_now = single_attended
            else:
                lure_now = single_attended or intermediate_target

            # Do not treat true target-pair displays as lures
            if hit_now:
                lure_now = False

            # Only register lures when no target-pair response epoch is active
            if lure_now and (eventOnset is None):
                lureOnsets.append(t)

            # Keep only recent lure events
            lureOnsets = [
                onset for onset in lureOnsets
                if (t - onset) <= MAX_RT
            ]

            if not t > (stimDur - waitRespTime):
                allPresentedSymbols.append(copy.deepcopy(randomSet))
        #         if (int(expInfo['testRun']) or (isTraining and trials.thisN < int(nTrials/2))) and conditions.thisN < 3:
                if fb_pairs_save == 'on':
                    if 'target' in imList[cond[0]].image and 'target' in imList[cond[1]].image:
                        mySound = sound.Sound('A', octave=3, hamming=True,
                                              speaker='Speaker', secs=0.100, volume=vol)
                        mySound.play()

            shuffle(randImage)


        # -----------------------------
        # Check keys (keep original testRun simulation structure)
        # -----------------------------
        if int(expInfo['testRun']):
            if len(RTs) > nDummyResponses and t >= RTs[nDummyResponses]:
                simulated_key = keyboard.KeyPress(name='space', code='space', tDown=t)  # Simulate keypress
                keys = [simulated_key]  # Mimic PsychoPy key structure
                nDummyResponses += 1
            else:
                keys = 0
        else:
            keys = kb.getKeys()

        if keys:
            if 'space' in keys[-1].name:
                trigN = '1' + str(isTraining) + trigdic['resp'] + trigdic[attendCond]
                t2 = t
                responseGiven = True
                if not isTraining:
                    sendTrigger(t-t2, trigN, expInfo['EEG'], 0.05)

                # RT relative to active target-pair epoch
                rt = None
                if eventOnset is not None:
                    rt = t - eventOnset

                in_window = (rt is not None) and (MIN_RT <= rt <= MAX_RT)

                # FA window relative to recent lure onsets
                valid_lure_rts = [
                    t - onset for onset in lureOnsets
                    if MIN_RT <= (t - onset) <= MAX_RT
                ]

                fa_in_window = (eventOnset is None) and (len(valid_lure_rts) > 0)

                # -----------------------------
                # Scoring
                # -----------------------------
                if in_window and (not eventResponded):

                    # HIT
                    addData(rt, True, sndFeedback_save, fb_pairs_save, absNumOfTrials, nrOfEntries, slowedDowntrials, isTraining, 1)
                    nrOfEntries += 1

                    eventResponded = True
                    eventOnset = None
                    lureOnsets = []

        #            if isTraining and conditions.thisN < 3:
                    if sndFeedback_save == 'on':
                        mySound = sound.Sound('A', octave=4, hamming=True,
                                              speaker='Speaker', secs=0.100, volume=vol)
                        mySound.play()

                elif fa_in_window:

                    # FALSE ALARM to recent lure event
                    fa_rt = min(valid_lure_rts)

                    addData('false alarm', False, sndFeedback_save, fb_pairs_save, absNumOfTrials, nrOfEntries, slowedDowntrials, isTraining, 0)
                    nrOfEntries += 1

                    lureOnsets = []

                # else: ignore

            elif 'escape' in keys[-1].name:
                core.quit()

        # -----------------------------
        # Miss-by-timeout
        # Place AFTER key handling
        # -----------------------------
        if (eventOnset is not None) and (not eventResponded) and ((t - eventOnset) > MAX_RT):
            addData('miss', True, sndFeedback_save, fb_pairs_save, absNumOfTrials, nrOfEntries, slowedDowntrials, isTraining, 0)
            nrOfEntries += 1

            eventResponded = True
            eventOnset = None
            lureOnsets = []

        # Do not show the symbols if the presentation is over (response will be still recorded)
        if t > stimDur - waitRespTime and imList[0].opacity:
            for im in imList:
                im.opacity = 0
      End Routine:
        thisExp.addData('allStim', [allPresentedSymbols])

        # Final check at end of trial to log missed responses
        if not responseGiven:
            if targetPair:
                addData('miss', targetPair, sndFeedback_save, fb_pairs_save, absNumOfTrials, nrOfEntries,slowedDowntrials, isTraining, 0)  # Missed target
            elif nrOfEntries == 0:
                addData('correct rejection', targetPair, sndFeedback_save, fb_pairs_save, absNumOfTrials, nrOfEntries, slowedDowntrials, isTraining,'CR')  # No target, no response
            nrOfEntries += 1
            responseGiven = True  # Mark as handled
    ImageComponent image_a
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[0]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    ImageComponent image_b
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[1]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    ImageComponent image_c
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[2]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    ImageComponent image_d
      durationEstim = 4.1
      image = stimuli/rect_target.png
      pos = xys[3]
      size = symbolSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      units = deg
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    TextComponent fix_trial
      color [set every repeat] = $[mLum, mLum, mLum]
      durationEstim = 4.1
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      text = +
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      saveStartStop = False
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.1
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
  Routine outro
    RoutineSettingsComponent outro
      saveStartStop = False
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    TextComponent outro_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $task_texts['bye']
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  Routine cond_intro
    RoutineSettingsComponent cond_intro
      saveStartStop = False
      skipIf = trials.thisN != int(nTrials/2) and trials.thisN != 0
      stopVal [duration (s)] = presentInstructionsFor
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    CodeComponent hands
      Code Type = Py
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      Begin Experiment:
        import math # for ceil
      Begin Routine:
        #rects.colors=([0.5, 0.5, 0.5])

        halfOftrials = int(nTrials/2)
        lowTrainingProportion = 1/4

        # Randomize hands before each block
        if not trials.thisN:
            hand_list = [0,1]
            shuffle(hand_list)

        if trials.thisN > halfOftrials-1:
            current_hand = hands_in_translation[hand_list[0]] # for presenting
            save_hand = hands[hand_list[0]] # for saving
            fb_pairs_msg = pair_snd_translation[1]
            fb_sound_msg = feedback_snd_translation[0]
            slowedDowntrials = 0
        else:
            if trials.thisN < halfOftrials*lowTrainingProportion and trainingSession and conditions.thisN < 8:
                slow_msg = slow_text_in_translation +' '+ str(math.ceil(halfOftrials*lowTrainingProportion))
                symShowFrames = 11*frameConst*3
                waitNextPairFrames = 54*frameConst*3
                flipAfterEvery = [element * (frameConst*3) for element in flipAfterOriginal]
                stimDur = 3.1*3 + waitRespTime
                slowedDowntrials = 1
            else:
                slow_msg = ''
                symShowFrames = 11*frameConst
                waitNextPairFrames = 54*frameConst
                flipAfterEvery = [element * frameConst for element in flipAfterOriginal]
                stimDur = 3.1 + waitRespTime
                slowedDowntrials = 0
            current_hand = hands_in_translation[hand_list[1]]
            save_hand = hands[hand_list[1]]
            fb_pairs_msg = pair_snd_translation[0]
            fb_sound_msg = feedback_snd_translation[0]

        if isTraining and conditions.thisN > 2 and not trainingSession:
            fb_pairs_msg = pair_snd_translation[1]
            fb_sound_msg = feedback_snd_translation[1]
        elif conditions.thisN > 7 and trainingSession:
            fb_pairs_msg = pair_snd_translation[1]
            fb_sound_msg = feedback_snd_translation[1]

        if not isTraining:
            fb_pairs_msg = ''
            fb_sound_msg = ''

        # Define numbers to draw
        numbers = ['1', '2', '3', '4']

        # Create TextStim objects for each number
        text_stims = []
        for num, pos in zip(numbers, xys):
            text_stim = visual.TextStim(
                win=win,
                text=num,
                pos=pos,
                color='black',
                height=1.0  # Adjust as needed
            )
            text_stims.append(text_stim)
      Each Frame:
        rects.draw() # Present the boxes

        # Draw all numbers
        for stim in text_stims:
            stim.draw()
    TextComponent text_block_above
      letterHeight = 2
      pos = (0, 5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['cond_text_attend'] + ' ' + attendCond
      wrapWidth = 30
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    KeyboardComponent key_block_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_block_below
      letterHeight = 1
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['cond_text_hand'] + ' ' + current_hand + '\n' + fb_pairs_msg + '\n' + fb_sound_msg + '\n' + slow_msg
      wrapWidth = 30
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    TextComponent please_fixate
      color [set every repeat] = $[mLum, mLum, mLum]
      letterHeight = 0.45
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['gaze']
      wrapWidth = 6
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  Routine setup
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    CodeComponent define_vars
      Code Type = Py
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      Begin Experiment:
        # core.rush(True, realtime=True)
        import copy

        # initialize 'Speaker'
        deviceManager.addDevice(
            deviceName='Speaker',
            index=6.0, # Most probably needs to be changed
            name='Speakers (Realtek(R) Audio) ', # # Most probably needs to be changed, e.g. Speakers (Realtek(R) Audio)  Headphones (Realtek(R) Audio) Headphones (LE_WH-1000XM3)
            deviceClass='psychopy.hardware.speaker.SpeakerDevice',
            resample=True,
            latencyClass=1,
        )


        mySound = sound.Sound('A', stereo=True, hamming=True, secs=0.100, speaker='Speaker', name='mySound')

        if expInfo['eyeTracker'] == '1':
            trainingList = ['experiment','training']

        if expInfo['EEG'] == '1':
            print('Set port')
            from psychopy import parallel
            try:
                port_address = int(expInfo['port address'], 0)   # '0' base allows both hex & decimal
                port = parallel.ParallelPort(address=port_address)
                port.setData(0)
                print(f"Parallel port initialized at {hex(port_address)}")
            except ValueError:
                print(f"Invalid port address: {expInfo['port address']}")
            except Exception as e:
                print(f"Error initializing parallel port: {e}")

        #trigdic = {
        #    'start': '1',
        #    'notStart': '0',
        #    '1+2': '1100',
        #    '1+3': '1010',
        #    '2+4': '0101',
        #    '3+4': '0011',
        #    'left': '0',
        #    'right': '1',
        #    'notResp': '0',
        #    'resp': '1'
        #    }

        trigdic = {
            'start': '11',
            'resp': '00',
            'calib': '10',
            'trianing': '1',
            'experiment': '0',
            '1+2': '1100',
            '1+3': '1010',
            '2+4': '0101',
            '3+4': '0011',
            '0': '0001',# positions from left to right
            '1': '0010',
            '2': '0011',
            '3': '0100',
            '4': '0101',
            '5': '0110',
            '6': '0111'
            }


        trigN = str()

        def sendTrigger(t, trigN, EEG, trigDur):
            if str(EEG) == '1':
                if t < trigDur and t > 0:  # send trigger for 50 ms and do not send the trigger before next flip time
                    port.setData(int(trigN, 2))
                else:
                    port.setData(0)

        if expInfo['trainingSession']:
            instrFile = 'translations/translation_training_'+ expInfo['translation'].lower()+'.xlsx'
        else:
            instrFile = 'translations/translation_'+ expInfo['translation'].lower()+'.xlsx'

        # Multiplier that scales the presentation times if the refresh rate is not 60
        frameConst = int(expInfo['refreshRate'])/60

        # This is to sync at 533.3(3) ms after the start of the presentation
        startFrame = 390 * frameConst

        # Waiting response after each presentation for that amount of time
        # Meaning that the "blank period" is this + whatever gets defined in iti routine
        waitRespTime = 1

        # NB! Actual stimulus duration is stimDur - waitRespTime
        stimDur = 3.1 + waitRespTime # stimDur = 4.1 # (e.g. 186 + 60 frames with 60 Hz)

        k = 0.85 # Just a scaler for rescaling the sizes
        k2 = 1.65
        boxSize = (2.5*k2, 3.2*k2) # 2.5, 3.2
        symbolSize = (boxSize[0]*k, boxSize[1]*k) # Should scale down compared to boxes (if tranparent)?
        # symbolSize = (2.5*k, 3.2*k)

        # Distance from centre to the edge of the stimuli in deg
        ecc = [3, 8] # 5.25, 10.25 x (4 or 9) + (width of the stimulus (2.5 deg) / 2) or 3/8
        # List of box positions
        xys = [(ecc[1]*-1,0), (ecc[0]*-1,0),(ecc[0],0), (ecc[1],0)]

        mLum = float(expInfo['maxLum'])

        # Array of place holder boxes to be presented on screen
        rects = visual.ElementArrayStim(
            win, name = 'rects', units='deg',
            fieldPos=(0.0, 0.0), fieldSize=(3, 4), fieldShape='square',
            nElements=4, sizes= boxSize, xys=xys,
            colors= ([mLum, mLum, mLum]), colorSpace='rgb', opacities=1, oris=0, # ([1.0, 1.0, 1.0])
            sfs=0, contrs=[1, 1,1,1], phases=0, elementTex='sqr',
            elementMask=None, texRes=48, interpolate=True,
            autoLog=None, maskParams=None
        )

        # Make a keyboard object
        kb = keyboard.Keyboard()

        # List of images used
        imageArray = [
            'stimuli/rect_ur.png',
            'stimuli/rect_dr.png',
            'stimuli/rect_dl.png',
            'stimuli/rect_ul.png',
            'stimuli/rect_target.png'
        ]

        # 4x as many target stimuli in the set should give
        # (random sampling without replacement) aprox. 70% trials with 1-3 target pairs
        randImage = [0,1,2,3,4,4,4,4] # Each number represents a symbol (4 == target)
        shuffle(randImage) # Shuffle the pool for the first round

        # A set with no targets (to replace targets if minimum interval of 905 ms have not eceeded after presenting the last target pair)
        nonTargetSet = imageArray[0:4]

        # This helps with data entries (see the code component in the trial routine)
        def addData(rt, isPair, sndFeedback_save, fb_pairs_save, trials, nrOfEntries, slowedDowntrials,isTraining, accuracy):
        #    if nrOfEntries > 0:
        #        thisExp.nextEntry()
            thisExp.nextEntry()
            thisExp.addData('hand', save_hand)
            thisExp.addData('RT', rt)
            thisExp.addData('targetPair', isPair)
            thisExp.addData('absNumOfTrials', trials)
            thisExp.addData('accuracy', accuracy)
            thisExp.addData('slowTrial', slowedDowntrials)
            thisExp.addData('sndFeedback', sndFeedback_save)
            thisExp.addData('sndPairs', fb_pairs_save)
            thisExp.addData('isTraining', isTraining)

        # Frame flipping schedule
        flipAfterOriginal = [4, 7, 3, 5] # Flip after that many frames (on 60 hz monitor)
        flipAfterEvery = [element * frameConst for element in flipAfterOriginal] # Multiply with the scaler

        # Chec if opacity of the box needs to be turned up (see the code component in the trial routine)
        def checkOpaStatus(opas, flipAfterEvery, frameNow):
            for opai in range(0, len(opas)):
                if frameNow % flipAfterEvery[opai] == 0:
                    opas[opai] = 1
            return opas

        # Change the symbol in that many frames
        symShowFrames = 11*frameConst
        waitNextPairFrames = 54*frameConst # waitNextPairFrames = 54*frameConst # (aprox 900 ms, 905 in original)

        # Load the table using PsychoPy's built-in function
        task_data = data.importConditions(instrFile)
        #print(task_data)
        # Initialize the dictionary
        task_texts = {}

        # Populate the dictionary from the loaded table
        for row in task_data:
            key = row['key'].strip()
            message = row['translated_message'].strip()
            task_texts[key] = message

        # For specific use (e.g., hands in translation)
        hands = ['left', 'right']
        hands_in_translation = [task_texts['left_translation'], task_texts['right_translation']]
        feedback_snd_translation = [task_texts['feedback_on_text'], task_texts['feedback_off_text']]
        pair_snd_translation = [task_texts['pairs_sound_on_text'], task_texts['pairs_sound_off_text']]

        slow_text_in_translation = task_texts['slow_text']

        # Example: Counting keys starting with 'general_intro'
        partial_key = 'general_intro'
        # Initialize count
        count = 0

        # Iterate through the keys and count matches
        for key in task_texts.keys():
            if key.startswith(partial_key):
                count += 1

        if int(expInfo['testRun']):
            presentInstructionsFor = 0.5
        else:
            presentInstructionsFor = 1e6  # Effectively "infinite"

        vol = float(expInfo['volume'])
        trainingSession = expInfo['trainingSession']
        eyeTrackerOn = expInfo['eyeTracker']

        if trainingSession:
        #    blockRowIndx = range(0,1)
            repeatBlockN = 1
        else:
            repeatBlockN = 2
        #    blockRowIndx = ''
      End Routine:
        thisExp.addData('translated_message',expInfo['translation'].lower()+'.xlsx')
    TextComponent intro_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $translated_message
      wrapWidth = 32
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    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine calib_instr
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    CodeComponent tracker_reminder
      Code Type = Auto->JS
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      Begin Routine:
        print(
            "Reminder: If you are using an eye tracker, enable HDF5 data saving in "
            "Settings (cogwheel icon > Data > Save hdf5 file)."
        )
      End Routine:
        # calib_instr_on_screen.opacity = 0
    TextComponent calib_instr_on_screen
      letterHeight = 1
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_texts['bText_training']
      wrapWidth = 30
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    KeyboardComponent calib_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = True
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  EyetrackerValidationRoutine validation
    borderColor = white
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = white
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.1
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.25
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = white
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.1
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.25
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
    useCustom = False
Flow
  LoopInitiator intro loopType="TrialHandler"
    Selected rows = $range(0,count)
    conditionsFile = $instrFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine setup
  LoopTerminator intro
  LoopInitiator eyeTracker loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = eyeTrackerOn
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    Routine calib_instr
    EyetrackerCalibrationRoutine calibration
    EyetrackerValidationRoutine validation
  LoopTerminator eyeTracker
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = repeatBlockN
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    conditions:
      [{'condFile': 'training.xlsx'},
      {'condFile': 'experiment.xlsx'}]
    Routine block_intro
    LoopInitiator conditions loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = repeatCondN
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      conditions:
        [{'attendCond': '1+2', 'pos2attLeft': 1, 'pos2attRight': 2},
        {'attendCond': '1+3', 'pos2attLeft': 1, 'pos2attRight': 3},
        {'attendCond': '2+4', 'pos2attLeft': 2, 'pos2attRight': 4},
        {'attendCond': '3+4', 'pos2attLeft': 3, 'pos2attRight': 4}]
      Routine cond_setup
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = nTrials
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        Routine cond_intro
        Routine iti
        Routine trial
      LoopTerminator trials
    LoopTerminator conditions
  LoopTerminator blocks
  Routine outro
